PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Id'], expName, expInfo['date'])
  Experiment info = {'Id': "''"}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Discriminacion de ptos_final
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Bienvenida
    RoutineSettingsComponent Bienvenida
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenido/a al experimento.



        Vas a participar en un estudio sobre toma de decisiones perceptivas. Tu tarea principal consistirá en observar nubes de puntos de dos colores (rojo y azul) y decidir rápidamente cuál de los dos colores es más numeroso.

        El experimento consta de dos etapas. A continuación, recibirás las instrucciones detalladas para la primera etapa.



        Presiona la BARRA ESPACIADORA para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruccion
    RoutineSettingsComponent Instruccion
      saveStartStop = False
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    TextComponent text_instructions
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En cada ensayo verás una caja con puntos rojos y azules mezclados. Tu objetivo es identificar el color dominante (el que tiene más puntos).


        Teclas de respuesta:

        - Presiona C si hay más puntos AZULES.


        - Presiona N si hay más puntos ROJOS.

        Tendras un total de 10 segundos para responder


        Feedback de Desempeño:
        Al final de cada bloque de 24 ensayos, verás una pantalla con resultados. Estos indicarán tu desempeño (precisión y velocidad) comparado con un grupo de participantes que realizó este estudio anteriormente.



        Presiona la BARRA ESPACIADORA para comenzar.
    KeyboardComponent key_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine condiciones
    RoutineSettingsComponent condiciones
      saveStartStop = False
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    CodeComponent asignacion
      Code Type = Both
      Begin Experiment:
        import re
        import random

        # --- 1. ASIGNACIÓN DE GRUPO (Paridad de ID) ---
        raw_id = expInfo.get('Id')

        # Extrae sólo los dígitos
        digits = re.findall(r'\d+', str(raw_id))
        pid = int(''.join(digits)) if digits else None

        if pid is None:
            group = 'Control'
            group_assignment_method = 'fallback_no_id'
        else:
            group = 'Experimental' if (pid % 2 == 0) else 'Control'
            group_assignment_method = 'parity_id'

        thisExp.addData('entered_id_raw', raw_id)
        thisExp.addData('entered_id_parsed', pid)
        thisExp.addData('assigned_group', group)
        thisExp.addData('group_assignment_method', group_assignment_method)


        # --- 2. CONTRABALANCEO DE ESCALA ---
        # Elegimos al azar entre Standard y Reverse
        scale_order = random.choice(['Standard', 'Reverse'])
        thisExp.addData('scale_order', scale_order)

        # Definimos los mapas
        map_standard = {'1': 1, '2': 2, '3': 3, '8': 4, '9': 5, '0': 6}
        map_reverse  = {'1': 6, '2': 5, '3': 4, '8': 3, '9': 2, '0': 1}

        # Seleccionamos el mapa activo según el sorteo
        if scale_order == 'Standard':
            active_conf_map = map_standard
        else:
            active_conf_map = map_reverse


        # --- 3. DEFINIR TEXTOS (Instrucciones y Leyendas) ---
        # Usamos las mismas variables que en JS para que el componente de Texto funcione igual

        if scale_order == 'Standard':
            # TEXTO LARGO (Instrucciones)
            txt_instrucciones_escala = (
                "IZQUIERDA (1-2-3) = Poca Confianza\n"
                "DERECHA (8-9-0) = Mucha Confianza\n\n"
                "1: Seguramente Incorrecto\n"
                "2: Probablemente Incorrecto\n"
                "3: Tal vez Incorrecto\n\n"
                "8: Tal vez Correcto\n"
                "9: Probablemente Correcto\n"
                "0: Seguramente Correcto"
            )

            # TEXTO CORTO (Leyenda en cada trial)
            txt_leyenda_breve = (
                "Indica tu confianza:\n"
                "1=Seg. Incorrecto   2=Prob. Incorrecto   3=Tal vez Incorrecto\n"
                "8=Tal vez Correcto   9=Prob. Correcto   0=Seg. Correcto"
            )

        else:
            # TEXTO LARGO (Reverso)
            txt_instrucciones_escala = (
                "IZQUIERDA (1-2-3) = Mucha Confianza\n"
                "DERECHA (8-9-0) = Poca Confianza\n\n"
                "1: Seguramente Correcto\n"
                "2: Probablemente Correcto\n"
                "3: Tal vez Correcto\n\n"
                "8: Tal vez Incorrecto\n"
                "9: Probablemente Incorrecto\n"
                "0: Seguramente Incorrecto"
            )

            # TEXTO CORTO (Reverso)
            txt_leyenda_breve = (
                "Indica tu confianza:\n"
                "1=Seg. Correcto   2=Prob. Correcto   3=Tal vez Correcto\n"
                "8=Tal vez Incorrecto   9=Prob. Incorrecto   0=Seg. Incorrecto"
            )
      Begin JS Experiment:
        // --- 1. ASIGNACIÓN DE GRUPO ---
        var raw_id = expInfo['Id'];
        var digits_only = String(raw_id).replace(/\D/g, '');
        var pid = null;
        var group = 'Control';

        if (digits_only.length > 0) {
            pid = parseInt(digits_only);
            if (pid % 2 === 0) {
                group = 'Experimental';
            } else {
                group = 'Control';
            }
        }
        psychoJS.experiment.addData('assigned_group', group);
        window.group = group;


        // --- 2. SORTEO DE ORDEN DE ESCALA ---
        var scale_order = (Math.random() > 0.5) ? 'Standard' : 'Reverse';
        psychoJS.experiment.addData('scale_order', scale_order);


        // --- 3. DEFINIR MAPAS (Para usar después) ---
        var map_standard = { '1': 1, '2': 2, '3': 3, '8': 4, '9': 5, '0': 6 };
        var map_reverse = { '1': 6, '2': 5, '3': 4, '8': 3, '9': 2, '0': 1 };

        // Guardamos el mapa activo en una variable global para usarlo en el Test
        window.active_conf_map = (scale_order === 'Standard') ? map_standard : map_reverse;


        // --- 4. TEXTOS (Instrucciones y Leyendas) ---

        var txt_instrucciones_escala = ""; // Para la pantalla de explicación
        var txt_leyenda_breve = "";        // Para la pantalla de cada trial

        if (scale_order === 'Standard') {
            // TEXTO LARGO
            txt_instrucciones_escala =
            "IZQUIERDA (1-2-3) = Poca Confianza\nDERECHA (8-9-0) = Mucha Confianza\n\n" +
            "1: Seguramente Incorrecto\n" +
            "2: Probablemente Incorrecto\n" +
            "3: Tal vez Incorrecto\n\n" +
            "8: Tal vez Correcto\n" +
            "9: Probablemente Correcto\n" +
            "0: Seguramente Correcto";

            // TEXTO CORTO (LEYENDA)
            txt_leyenda_breve =
            "Indica tu nivel de confianza:\n\n" +
            "1: Seguramente Incorrecto\n" +
            "2: Probablemente Incorrecto\n" +
            "3: Tal vez Incorrecto\n\n" +
            "8: Tal vez Correcto\n" +
            "9: Probablemente Correcto\n" +
            "0: Seguramente Correcto";
        } else {
            // TEXTO LARGO REVERSO
            txt_instrucciones_escala =
            "IZQUIERDA (1-2-3) = Mucha Confianza\nDERECHA (8-9-0) = Poca Confianza\n\n" +
            "1: Seguramente Correcto\n" +
            "2: Probablemente Correcto\n" +
            "3: Tal vez Correcto\n\n" +
            "8: Tal vez Incorrecto\n" +
            "9: Probablemente Incorrecto\n" +
            "0: Seguramente Incorrecto";

            // TEXTO CORTO REVERSO
            txt_leyenda_breve =
            "Indica tu nivel de confianza:\n\n" +
            "1: Seguramente Correcto\n" +
            "2: Probablemente Correcto\n" +
            "3: Tal vez Correcto\n\n" +
            "8: Tal vez Incorrecto\n" +
            "9: Probablemente Incorrecto\n" +
            "0: Seguramente Incorrecto";
        }

        // Hacemos globales los textos para que los componentes de Texto los vean
        window.txt_instrucciones_escala = txt_instrucciones_escala;
        window.txt_leyenda_breve = txt_leyenda_breve;

        //Armamos la variable que cuenta el total de los trial
        window.trial_tot = 0;
  Routine rutina_fix
    RoutineSettingsComponent rutina_fix
      saveStartStop = False
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    TextComponent stim_cruz
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine trial_prueba
    RoutineSettingsComponent trial_prueba
      saveStartStop = False
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    CodeComponent trial_prueba
      Code Type = Both
      Begin Experiment:
        import numpy as np
        import random

        # Parámetros generales
        nDots = 80
        difficulties = {
            'Easy': [61, 62, 63, 64, 65],
            'Average': [51, 52, 53, 54, 55],
            'Difficult': [41, 42, 43, 44, 45]
        }
        stimDuration = 0.2  # 200 ms
        blockSize = 24

        # Parámetros visuales (asumiendo units='height')
        cloudRadius = 0.30   # radio del campo de puntos (ajústalo si lo ves grande/pequeño)
        dotSize = 0.015      # tamaño de cada punto (en units de 'height')

        # Colores en rgb255 (más robusto para ElementArrayStim con matriz por elemento)
        RED = [255, 0, 0]
        BLUE = [0, 0, 255]

        # Variable de feedback compartida
        feedbackText = ""
      Begin JS Experiment:
        // Definimos parámetros GLOBALES
        window.nDots = 80;
        window.stimDuration = 0.2; // 200 ms
        window.cloudRadius = 0.30;
        window.dotSize = 0.015;

        // Diccionario de dificultades
        window.difficulties = {
            'Easy': [61, 62, 63, 64, 65],
            'Average': [51, 52, 53, 54, 55],
            'Difficult': [41, 42, 43, 44, 45]
        };

        // --- Inicialización de los puntos ---
        window.myDots = []; // Hacemos la lista global

        for (var i = 0; i < window.nDots; i++) {
            let newDot = new visual.Polygon({
                win: psychoJS.window,
                name: 'dot_' + i,
                units: 'height',
                edges: 32,
                radius: window.dotSize / 2,
                ori: 0,
                pos: [0, 0],
                lineWidth: 1,
                lineColor: new util.Color('white'),
                fillColor: new util.Color('white'),
                opacity: 1,
                depth: 0,
                interpolate: true,
            });
            // ¡OJO! No le ponemos autoDraw aquí
            newDot.setAutoDraw(false);
            window.myDots.push(newDot);
        }
      Begin JS Routine:
        // --- 1. Selección de parámetros ---
        var diff_keys = Object.keys(window.difficulties);
        util.shuffle(diff_keys);
        var difficulty = diff_keys[0];

        var possible_counts = window.difficulties[difficulty];
        util.shuffle(possible_counts);
        var dominant_count = possible_counts[0];

        var possible_colors = ['Red', 'Blue'];
        util.shuffle(possible_colors);
        var dominant_color = possible_colors[0];

        var red_dots, blue_dots;

        if (dominant_color === 'Red') {
            red_dots = dominant_count;
            blue_dots = window.nDots - dominant_count;
            window.correctAns = 'n';
        } else {
            blue_dots = dominant_count;
            red_dots = window.nDots - dominant_count;
            window.correctAns = 'c';
        }

        // --- 2. Asignación de Coordenadas y Color ---
        var RED_C = new util.Color('red');
        var BLUE_C = new util.Color('blue');

        for (var i = 0; i < window.nDots; i++) {
            var theta = Math.random() * 2 * Math.PI;
            var r_val = window.cloudRadius * Math.sqrt(Math.random());
            var x = r_val * Math.cos(theta);
            var y = r_val * Math.sin(theta);

            var this_color;
            if (i < red_dots) {
                this_color = RED_C;
            } else {
                this_color = BLUE_C;
            }

            // Verificamos que el punto exista antes de tocarlo
            if (window.myDots[i]) {
                window.myDots[i].setPos([x, y]);
                window.myDots[i].setFillColor(this_color);
                window.myDots[i].setLineColor(this_color);

                // ¡CRUCIAL! Forzamos setAutoDraw(false)
                // Esto evita que se superpongan si alguno quedó "pegado"
                window.myDots[i].setAutoDraw(false);
            }
        }

        // Guardar datos en el archivo Excel/CSV
        psychoJS.experiment.addData('difficulty', difficulty);
        psychoJS.experiment.addData('dominant_color', dominant_color);
        psychoJS.experiment.addData('dominant_count', dominant_count);

        //Vamos sumando los trial y guradamos la variable
        window.trial_tot += 1;
        psychoJS.experiment.addData('trial_tot', window.trial_tot);
      Begin Routine:
        difficulty = random.choice(list(difficulties.keys()))
        dominant_count = random.choice(difficulties[difficulty])

        dominant_color = random.choice(['Red', 'Blue'])

        if dominant_color == 'Red':
            red_dots = dominant_count
            blue_dots = nDots - dominant_count
            correctAns = 'n'
        else:
            blue_dots = dominant_count
            red_dots = nDots - dominant_count
            correctAns = 'c'

        theta = np.random.rand(nDots) * 2 * np.pi
        r = cloudRadius * np.sqrt(np.random.rand(nDots))
        xys = np.column_stack([r * np.cos(theta), r * np.sin(theta)])

        colors_array = np.zeros((nDots, 3), dtype=float)
        colors_array[:red_dots, :] = RED
        colors_array[red_dots:, :] = BLUE

        perm = np.random.permutation(nDots)
        xys = xys[perm]
        colors_array = colors_array[perm]

        dot_stim = visual.ElementArrayStim(
            win,
            nElements=nDots,
            xys=xys,
            elementTex=None,
            elementMask='circle',
            sizes=dotSize,
            colors=colors_array,
            colorSpace='rgb255'
        )

        thisExp.addData('difficulty', difficulty)
        thisExp.addData('dominant_color', dominant_color)
        thisExp.addData('dominant_count', dominant_count)
        thisExp.addData('group', group)
      Each Frame:
        # Dibujar el estímulo SOLO durante 200 ms desde inicio de la rutina
        # 't' es el tiempo transcurrido en esta rutina (Builder lo da)
        if t < stimDuration:
            dot_stim.draw()
        # Después de 200 ms, la pantalla queda sin el estímulo y se espera respuesta
      Each JS Frame:
        // Definimos el límite de tiempo
        var timeLimit = window.stimDuration; // 0.2s

        if (t < timeLimit) {
            // --- FASE 1: MOSTRAR ESTÍMULO (0 a 200ms) ---
            for (var i = 0; i < window.nDots; i++) {
                if (window.myDots[i]) {
                    // Usamos .draw() para dibujar frame por frame
                    window.myDots[i].draw();
                }
            }
        } else {
            // --- FASE 2: PANTALLA GRIS (200ms en adelante) ---
            // El tiempo pasó, así que NO llamamos a .draw().

            // MEDIDA DE SEGURIDAD:
            // Forzamos el apagado por si alguno quedó con 'autoDraw' activado accidentalmente.
            // Esto garantiza que desaparezcan visualmente.
            for (var i = 0; i < window.nDots; i++) {
                if (window.myDots[i]) {
                    window.myDots[i].setAutoDraw(false);
                }
            }
        }
      End JS Routine:
        for (var i = 0; i < window.nDots; i++) {
            window.myDots[i].setAutoDraw(false);
        }


        // Registramos cuál era la respuesta correcta ( 'n' o 'c' )
        psychoJS.experiment.addData('correctAns', window.correctAns)

        // El componente de teclado del Builder se encargará de guardar
        // qué tecla presionó el participante y si acertó (key_resp.corr),
        // pero aquí guardamos explícitamente qué DEBÍA responder.
        // Registramos cuál era la respuesta correcta
      End Routine:
        # Registrar a que grupo pertencen
        thisExp.addData('group', group)

        # Registrar la tecla correcta esperada y número de ensayo
        thisExp.addData('correctAns', correctAns)
        thisExp.addData('trialNumber', fase_prueba.thisN + 1)
    KeyboardComponent resp_ptos
      allowedKeys [set every repeat] = 'n','c'
      correctAns = correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent feedback_prueba
      Code Type = Both
      Begin JS Experiment:
        // Definimos las constantes aquí para evitar errores
        window.blockSize = 24;    // Tamaño del bloque
        window.feedbackText = ""; // Texto vacío al inicio

        // Creamos el reloj manualmente para evitar el ReferenceError
        window.FeedbackClock = new util.Clock();
      Begin JS Routine:
        // Obtenemos el número de ensayo actual
        var trialNumber = fase_prueba.thisN + 1;

        // Usamos window.blockSize para asegurar que la variable global existe
        var limit = (typeof window.blockSize !== 'undefined') ? window.blockSize : 24;

        if ((trialNumber % limit) === 0) {

            // Inicializamos variables
            var performance_score = 0;
            var current_group = (typeof window.group !== 'undefined') ? window.group : 'Control';

            // Lógica del puntaje
            if (current_group === 'Experimental') {
                // Random entre 70 y 95
                performance_score = Math.floor(Math.random() * (95 - 70 + 1)) + 70;
                // CORREGIDO: Usamos concatenación (+) para que se vea el número sí o sí
                feedbackText = 'Has alcanzado un desempeño equivalente a los mejores del grupo: ' + performance_score + '%.\n\n(Presioná la barra espaciadora para continuar)';
            } else {
                // Random entre 37 y 62
                performance_score = Math.floor(Math.random() * (62 - 37 + 1)) + 37;
                // CORREGIDO: Usamos concatenación (+)
                feedbackText = 'Tu rendimiento se ubica en un rango intermedio del grupo: ' + performance_score + '%.\n\n(Presioná la barra espaciadora para continuar)';
            }

            // --- ACTUALIZACIÓN VISUAL ---
            // NOTA: En tu archivo anterior el componente se llamaba 'Feedback'.
            // Si le cambiaste el nombre, ajusta la palabra 'Feedback' aquí abajo.
            if (typeof Feedback !== 'undefined') {
                Feedback.setText(feedbackText);
            }

            // Guardar datos
            //psychoJS.experiment.addData('feedback_group', current_group);
            //psychoJS.experiment.addData('feedback_score_shown', performance_score);

            continueRoutine = true;

        } else {
            // Si no es fin de bloque, saltar
            continueRoutine = false;
        }
      Begin Routine:
        # Mostrar feedback SOLO al final de cada bloque de 24 ensayos
        trialNumber = fase_prueba.thisN + 1  # thisN es 0-indexado
        if trialNumber % blockSize == 0:
            # Generar puntaje sesgado según el grupo
            if group == 'Experimental':
                performance_score = random.randint(70, 95)
                feedbackText = f'Has alcanzado un desempeño equivalente a los mejores del grupo: {performance_score}%.'
            else:
                performance_score = random.randint(37, 62)
                feedbackText = f'Tu rendimiento se ubica en un rango intermedio del grupo: {performance_score}%.'
            # Registrar el feedback mostrado (opcional)
            thisExp.addData('block_end_trial', trialNumber)
            thisExp.addData('feedback_group', group)
            thisExp.addData('feedback_score_shown', performance_score)
        else:
            # Si no es fin de bloque, saltar esta rutina
            continueRoutine = False
    TextComponent Feedback
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $feedbackText
    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instrucciones_testeo
    RoutineSettingsComponent Instrucciones_testeo
      saveStartStop = False
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    TextComponent testeo_instrucciones
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Fin de la Etapa 1.

        A partir de ahora comienza la segunda etapa. La tarea visual sigue siendo la misma: indicar si hay más puntos azules o rojos usando las teclas C y N, respectivamente.
        Pero a diferencia de la etapa anterior, ya NO recibirás feedback sobre tu desempeño al final de los bloques.  En su lugar, te pediremos que evalúes tu Nivel de Confianza después de cada decisión.
         Es decir, tendrás que indicarnos qué tan seguro/a estás de que tu respuesta anterior fue correcta o incorrecta.

        Presiona la BARRA ESPACIADORA para comenzar.
    KeyboardComponent Key_instrucciones_test
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_testeo
    RoutineSettingsComponent trial_testeo
      saveStartStop = False
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    CodeComponent trial_testeo
      Code Type = Both
      Begin JS Routine:
        // FASE 2: RECICLAJE DE PUNTOS ---

        // 1. SELECCIÓN DE DIFICULTAD Y COLOR (Igual que antes)
        var diff_keys = Object.keys(window.difficulties);
        util.shuffle(diff_keys);
        var difficulty = diff_keys[0];

        var possible_counts = window.difficulties[difficulty];
        util.shuffle(possible_counts);
        var dominant_count = possible_counts[0];

        var possible_colors = ['Red', 'Blue'];
        util.shuffle(possible_colors);
        var dominant_color = possible_colors[0];

        // Definir contadores y respuesta correcta
        var red_dots, blue_dots;

        if (dominant_color === 'Red') {
            red_dots = dominant_count;
            blue_dots = window.nDots - dominant_count;
            window.correctAns = 'n';
        } else {
            blue_dots = dominant_count;
            red_dots = window.nDots - dominant_count;
            window.correctAns = 'c';
        }

        // 2. ACTUALIZACIÓN DE LOS PUNTOS EXISTENTES
        // No creamos 'ElementArrayStim' porque rompe la web.
        // Usamos los puntos individuales (window.myDots) que creamos en la Etapa 1.

        var RED_C = new util.Color('red');
        var BLUE_C = new util.Color('blue');

        for (var i = 0; i < window.nDots; i++) {
            // A. Matemática: Generar nuevas coordenadas polares
            var theta = Math.random() * 2 * Math.PI;
            var r_val = window.cloudRadius * Math.sqrt(Math.random());

            // Convertir a cartesianas (X, Y)
            var x = r_val * Math.cos(theta);
            var y = r_val * Math.sin(theta);

            // B. Color: Decidir color de este punto
            var this_color;
            if (i < red_dots) {
                this_color = RED_C;
            } else {
                this_color = BLUE_C;
            }

            // C. Aplicar cambios a los puntos GLOBALES
            // Verificamos que el punto exista (debería, porque viene de la etapa 1)
            if (window.myDots[i]) {
                window.myDots[i].setPos([x, y]);
                window.myDots[i].setFillColor(this_color);
                window.myDots[i].setLineColor(this_color);

                // ¡CRUCIAL! Aseguramos que NO se dibujen solos (autoDraw false)
                window.myDots[i].setAutoDraw(false);
            }
        }

        // 3. LOGUEO DE DATOS
        psychoJS.experiment.addData('difficulty', difficulty);
        psychoJS.experiment.addData('dominant_color', dominant_color);
        psychoJS.experiment.addData('dominant_count', dominant_count);
        psychoJS.experiment.addData('correctAns', correctAns); // Importante para saber si acertó

        // Guardamos grupo por si acaso
        if (typeof window.group !== 'undefined') {
            psychoJS.experiment.addData('group', window.group);
        }

        //Vamos sumando los trial y guradamos la variable
        window.trial_tot += 1;
        psychoJS.experiment.addData('trial_tot', window.trial_tot);
      Begin Routine:
        # Elegir dificultad y cantidad dominante
        difficulty = random.choice(list(difficulties.keys()))
        dominant_count = random.choice(difficulties[difficulty])

        # Elegir color dominante
        dominant_color = random.choice(['Red', 'Blue'])

        # Conteos y respuesta correcta
        if dominant_color == 'Red':
            red_dots = dominant_count
            blue_dots = nDots - dominant_count
            correctAns = 'n'
        else:
            blue_dots = dominant_count
            red_dots = nDots - dominant_count
            correctAns = 'c'

        # Posiciones en círculo
        theta = np.random.rand(nDots) * 2 * np.pi
        r = cloudRadius * np.sqrt(np.random.rand(nDots))
        xys = np.column_stack([r * np.cos(theta), r * np.sin(theta)])

        # Colores por elemento
        colors_array = np.zeros((nDots, 3), dtype=float)
        colors_array[:red_dots, :] = RED
        colors_array[red_dots:, :] = BLUE

        # Mezclar
        perm = np.random.permutation(nDots)
        xys = xys[perm]
        colors_array = colors_array[perm]

        # Estímulo (usa visual global de Builder)
        dot_stim = visual.ElementArrayStim(
            win,
            nElements=nDots,
            xys=xys,
            elementTex=None,
            elementMask='circle',
            sizes=dotSize,
            colors=colors_array,
            colorSpace='rgb255'
        )

        # Log
        thisExp.addData('difficulty', difficulty)
        thisExp.addData('dominant_color', dominant_color)
        thisExp.addData('dominant_count', dominant_count)
      Each Frame:
        if t < stimDuration:
            dot_stim.draw()
      Each JS Frame:
        // Definimos el límite de tiempo
        var timeLimit = window.stimDuration; // 0.2s

        if (t < timeLimit) {
            // --- FASE 1: MOSTRAR ESTÍMULO (0 a 200ms) ---
            for (var i = 0; i < window.nDots; i++) {
                if (window.myDots[i]) {
                    // Usamos .draw() para dibujar frame por frame
                    window.myDots[i].draw();
                }
            }
        } else {
            // --- FASE 2: PANTALLA GRIS (200ms en adelante) ---
            // El tiempo pasó, así que NO llamamos a .draw().

            // MEDIDA DE SEGURIDAD:
            // Forzamos el apagado por si alguno quedó con 'autoDraw' activado accidentalmente.
            // Esto garantiza que desaparezcan visualmente.
            for (var i = 0; i < window.nDots; i++) {
                if (window.myDots[i]) {
                    window.myDots[i].setAutoDraw(false);
                }
            }
        }
      End JS Routine:
        psychoJS.experiment.addData('correctAns', window.correctAns);
      End Routine:
        thisExp.addData('correctAns', correctAns)
        thisExp.addData('trial2Number', fase_testeo.thisN + 1)
    KeyboardComponent resp_testeo
      allowedKeys [set every repeat] = 'c','n'
      correctAns = correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine EscalaOC
    RoutineSettingsComponent EscalaOC
      saveStartStop = False
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    CodeComponent escala_testeo
      Code Type = Both
      Begin JS Routine:
        // --- PUENTE DE TEXTO ---

        // 1. Definir el Fallback (Plan B)
        // Si por alguna razón la variable global falló, usamos un texto de seguridad
        var texto_final = "Indica tu confianza (1-3 o 8-0)";

        // 2. Intentar recuperar la variable GLOBAL (window)
        // Tu código de Begin Experiment la guardó en window.txt_leyenda_breve
        if (typeof window.txt_leyenda_breve !== 'undefined') {
            texto_final = window.txt_leyenda_breve;
        }

        // 3. Crear la variable LOCAL
        // Esto es vital: El componente visual busca 'txt_leyenda_breve', no 'window.txt_leyenda_breve'
        txt_leyenda_breve = texto_final;

        // 4. INYECCIÓN DIRECTA (El golpe de gracia)
        // Forzamos al componente visual 'Escala_confianza' a tomar este texto AHORA MISMO.
        if (typeof Escala_confianza !== 'undefined') {
            Escala_confianza.setText(texto_final);
            Escala_confianza.text = texto_final; // Refuerzo para versiones nuevas de PsychoJS
        }

        // Debug para que te quedes tranquilo mirando la consola (F12)
        console.log("Routine EscalaOC: Texto cargado ->", texto_final);
      End JS Routine:
        // --- CÓDIGO CORREGIDO PARA GUARDAR DATOS DE CONFIANZA ---

        // 1. RECUPERAR EL MAPA GLOBAL (¡Esta es la corrección clave!)
        // Usamos el mapa que se decidió al principio del experimento (Standard o Reverse)
        // Si por alguna razón no existe, usamos un fallback para que no falle.
        var map_to_use = (typeof window.active_conf_map !== 'undefined') ? window.active_conf_map : { '1': 1, '2': 2, '3': 3, '8': 4, '9': 5, '0': 6 };

        // 2. Definir las etiquetas de significado
        // Esto SI queda fijo, porque el "Nivel 6" siempre significa "Seguro Correcto",
        // sin importar qué tecla se usó para llegar a él.
        var confidence_labels = {
            1: 'Seguramente Incorrecto',
            2: 'Probablemente Incorrecto',
            3: 'Tal vez sea Incorrecto',
            4: 'Tal vez sea Correcto',
            5: 'Probablemente Correcto',
            6: 'Seguramente Correcto'
        };

        // 3. Obtener la tecla presionada
        var ckey = key_conf.keys; // Asegurate que tu componente se llame 'key_conf'
        if (Array.isArray(ckey)) {
            ckey = ckey[ckey.length - 1]; // Tomar la última si hay varias
        }

        // 4. Obtener el NIVEL usando el MAPA DINÁMICO
        // Aquí ocurre la magia:
        // Si es Standard: Tecla '1' -> Nivel 1 (Incorrecto)
        // Si es Reverse:  Tecla '1' -> Nivel 6 (Correcto)
        var level = map_to_use[ckey];

        // Validación por si apretaron una tecla rara o nada
        if (level === undefined) {
            level = 'NA';
        }

        // 5. Obtener la etiqueta de texto basada en el nivel calculado
        var label = confidence_labels[level];
        if (label === undefined) {
            label = 'NA';
        }

        // 6. Guardar datos en el archivo
        psychoJS.experiment.addData('confidence_key', ckey);   // Qué tecla tocó (ej: '1')
        psychoJS.experiment.addData('confidence_level', level); // Qué valor numérico real tiene (1-6)
        psychoJS.experiment.addData('confidence_label', label); // Qué significa (ej: 'Seguramente Correcto')

        // Debug para que veas en la consola si funciona (F12)
        console.log(`Tecla: ${ckey} | Mapa: ${window.scale_order} | Nivel: ${level}`);
      End Routine:
        # Las etiquetas base son siempre las mismas (el significado del nivel 1 al 6 no cambia)
        confidence_labels = {
            1: 'Seguramente Incorrecto',
            2: 'Probablemente Incorrecto',
            3: 'Tal vez sea Incorrecto',
            4: 'Tal vez sea Correcto',
            5: 'Probablemente Correcto',
            6: 'Seguramente Correcto',
        }

        # Obtener la tecla (key_conf.keys suele ser una lista en Python)
        ckey = key_conf.keys
        if isinstance(ckey, list):
            ckey = ckey[-1]  # Tomamos la última tecla por seguridad

        # --- CAMBIO CLAVE: Usamos el mapa activo variable, no uno fijo ---
        # active_conf_map ya fue definido en Begin Experiment
        level = active_conf_map.get(ckey, None)

        # Obtener etiqueta
        label = confidence_labels.get(level, 'NA')

        # Guardar datos
        thisExp.addData('confidence_key', ckey)
        thisExp.addData('confidence_level', level)
        thisExp.addData('confidence_label', label)
    TextComponent Escala_confianza
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_leyenda_breve
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    KeyboardComponent key_conf
      allowedKeys = '1','2','3','8','9','0' 
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine despedida
    RoutineSettingsComponent despedida
      saveStartStop = False
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    CodeComponent guardar_exp
      Code Type = JS
      Begin JS Routine:
        // --- CÓDIGO DE GUARDADO FINAL ---

        var filename = expInfo['Id'] + "_" + expInfo['date'] + ".csv";
        var dataContent = psychoJS.experiment._trialsData;

        function cleanAndSortCSV(jsonArray) {
            if (!jsonArray || jsonArray.length === 0) return "";

            var allKeys = [];
            jsonArray.forEach(function(row) {
                Object.keys(row).forEach(function(key) {
                    if (allKeys.indexOf(key) === -1) allKeys.push(key);
                });
            });

            // 1. LA SÚPER ESCOBA: Eliminamos tiempos, contadores, metadatos y duraciones
            var cleanKeys = allKeys.filter(function(key) {
                return !key.includes('.started') &&
                       !key.includes('.stopped') &&
                       !key.includes('.ran') &&
                       !key.includes('.thisTrialN') &&
                       !key.includes('.thisRepN') &&
                       !key.includes('.thisIndex') &&
                       !key.includes('.duration') &&     // Adiós duración de la tecla
                       !key.includes('expName') &&       // Adiós nombre del exp
                       !key.includes('psychopyVersion') && // Adiós versión
                       !key.includes('OS') &&            // Adiós sistema operativo
                       !key.includes('frameRate');       // Adiós monitor
            });

            // 2. LA LISTA VIP: Orden a medida sin los ceros de .corr
            var vipColumns = [
                'Id', 'date', 'grupo_asignado',
                'trial_tot', 'fase_prueba.thisN', 'fase_testeo.thisN',
                'difficulty', 'dominant_color', 'correctAns', 'dominant_count',
                // Respuestas Fase 1 (Prueba) - Sin el .corr
                'resp_ptos.keys', 'resp_ptos.rt',
                // Respuestas Fase 2 (Testeo) - Sin el .corr
                'resp_testeo.keys', 'resp_testeo.rt',
                // Variables de Confianza
                'confidence_key', 'confidence_level', 'confidence_label', 'key_conf.rt',
                // Otros datos
                'scale_order'
            ];

            // Motor de ordenamiento
            cleanKeys.sort(function(a, b) {
                var indexA = vipColumns.indexOf(a);
                var indexB = vipColumns.indexOf(b);
                if (indexA !== -1 && indexB !== -1) return indexA - indexB;
                if (indexA !== -1) return -1;
                if (indexB !== -1) return 1;
                return 0;
            });

            // 3. ARMADO DEL EXCEL
            var csvString = cleanKeys.join(",") + "\n";
            jsonArray.forEach(function(row) {
                var rowValues = cleanKeys.map(function(key) {
                    var val = row[key];
                    if (val === null || val === undefined) return "";
                    var strVal = String(val);
                    if (strVal.includes(",") || strVal.includes("\n") || strVal.includes('"')) {
                        strVal = '"' + strVal.replace(/"/g, '""') + '"';
                    }
                    return strVal;
                });
                csvString += rowValues.join(",") + "\n";
            });
            return csvString;
        }

        // Ejecutamos la limpieza
        var finalCSV = cleanAndSortCSV(dataContent);

        // Enviamos a DataPipe
        fetch("https://pipe.jspsych.org/api/data/", {
            method: "POST",
            headers: { "Content-Type": "application/json", Accept: "*/*" },
            body: JSON.stringify({
                experimentID: "ASnLrtHTzzul",
                filename: filename,
                data: finalCSV,
            }),
        }).then(function(response) {
            console.log("Éxito. Status:", response.status);
            setTimeout(function() { window.location.href = "https://forms.gle/bLX1RgC5yQ6jy9QE7"; }, 6000);
        }).catch(function(error) {
            console.log("Error:", error);
            setTimeout(function() { window.location.href = "https://forms.gle/bLX1RgC5yQ6jy9QE7"; }, 6000);
        });
    TextComponent text_despedida
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Has completado la tarea de percepción visual!

        Aguarde unos segundos a ser redirigido a otra página para continuar con el experimento.
Flow
  Routine Bienvenida
  Routine Instruccion
  Routine condiciones
  LoopInitiator fase_prueba loopType="TrialHandler"
    loopType = random
    nReps = 24
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    Routine rutina_fix
    Routine trial_prueba
    Routine feedback
  LoopTerminator fase_prueba
  Routine Instrucciones_testeo
  LoopInitiator fase_testeo loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine rutina_fix
    Routine trial_testeo
    Routine EscalaOC
  LoopTerminator fase_testeo
  Routine despedida
